PsychoPy2experiment version="2020.2.10"
Settings
  Experiment info = {'participant': '', 'session': '001', 'age': '', 'sex at birth': '', 'dominant hand': ''}
  Full-screen window = True
  Monitor = testMonitor
  Save csv file = True
  Screen = 1
  Units = height
  Window size (pixels) = [1536, 864]
  expName = WM retro-cue
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Routines
  Routine blankStart
    PolygonComponent fixStart
      fillColor = $[1,1,1]
      shape = cross
      size = (0.01, 0.01)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 4
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  Routine blankEnd
    PolygonComponent fixEnd
      fillColor = $[1,1,1]
      shape = cross
      size = (0.01, 0.01)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 4
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    CodeComponent percentCorrect_run
      Code Type = Auto->JS
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      Begin Routine:
        percent_correct = str(round(number_correct/totalN*100,2))
  Routine trialEndBlank
    PolygonComponent fixStartTrial
      fillColor = $[1,1,1]
      shape = cross
      size = (0.01, 0.01)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 6
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    CodeComponent countCorrectRun
      Code Type = Auto->JS
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      End Routine:
        if keyResp.corr:
            number_correct = number_correct + 1
            totalN=totalN+1
        else:
            totalN=totalN+1
  Routine Before_run
    TextComponent text_run
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      text [set every repeat] = $textBefore_run
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    KeyboardComponent key_resp_2
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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    CodeComponent numberCorrect_Reset
      Code Type = Auto->JS
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      Begin Routine:
        number_correct = 0
        totalN = 0
  Routine Welcome
    TextComponent Welcome_text
      letterHeight = 0.05
      startVal [time (s)] = 0.0
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      text:
        Welcome to the experiment!
        (Press space to continue)
    KeyboardComponent space1
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine feedback_2
    CodeComponent feedbackCode
      Code Type = Auto->JS
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      Begin Experiment:
        msg=""
      Begin Routine:
        if keyResp_Practice.corr:
            msg="Correct"
            number_correct = number_correct+1
            totalN = totalN+1
        else:
            msg="Incorrect"
            totalN = totalN+1
    TextComponent feedbackText
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 0.8
      text [set every repeat] = $msg
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  Routine Instr1
    TextComponent Instruction_text
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      text [set every repeat] = $instructions
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    KeyboardComponent space2
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine trial_Instr
    ImageComponent stim1_inst
      image [set every repeat] = $image1L
      pos = (-0.11, 0)
      size = (0.2, 0.2)
      startVal [time (s)] = 0
      texture resolution = 512
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    ImageComponent stim2_inst
      image [set every repeat] = $image1R
      pos = (0.11, 0)
      size = (0.2, 0.2)
      startVal [time (s)] = 0
      texture resolution = 512
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    TextComponent trialExplanation
      letterHeight = 0.05
      pos = (0, 0.3)
      startVal [time (s)] = 0.0
      text = You can see the first memory set here
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    KeyboardComponent space3
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine delayInst
    PolygonComponent fixDelay_2
      fillColor = $[1,0,0]
      lineColor = $[1,0,0]
      shape = cross
      size = (0.01, 0.01)
      startVal [time (s)] = 0
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    TextComponent delayExplanation
      letterHeight = 0.05
      pos = (0, 0.3)
      startVal [time (s)] = 0.0
      text = The red cross indicates the delay period. You have to keep the cued images in mind during this time. Fixate on the cross whenever it is present. No response can be made during this time.  
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    KeyboardComponent space4
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine responseInst
    ImageComponent probe_inst
      image [set every repeat] = $imageCuedProbe
      size = (0.2, 0.2)
      startVal [time (s)] = 0
      stopVal [duration (s)] = 2.5
      texture resolution = 512
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    TextComponent probeIndicator_inst
      letterHeight = 0.1
      pos = (0,0.2)
      startVal [time (s)] = 0
      stopVal [duration (s)] = 2.5
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      text [set every repeat]:
        $arrow
    PolygonComponent fixProbe_inst
      fillColor = $[0,1,0]
      lineColor = $[0,1,0]
      shape = cross
      size = (0.01, 0.01)
      startVal [time (s)] = 2.5
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    KeyboardComponent reponseInstr
      allowedKeys = 'right'
      correctAns = $buttonCorrect
      forceEndRoutine = True
      startVal [time (s)] = 2.5
      storeCorrect = True
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    TextComponent probeInst
      letterHeight = 0.05
      pos = (0, 0.25)
      startVal [time (s)] = 2.5
      text = You just saw the test image. In this case, it was part of the memorized images. You also saw an arrow above the image. Press the correct arrow key to continue. You can answer immediately after the test image is presented without waiting for the green fixation cross. 
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  Routine reward
    TextComponent rewardInst
      letterHeight = 0.05
      startVal [time (s)] = 0.0
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      text:
        Great!
        We will now have a couple of training trials to make sure you understood the task. (Press 'space')
    KeyboardComponent space5
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine feedbackTest
    KeyboardComponent key_resp_5
      allowedKeys = 'y','n','left','right','space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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    TextComponent text_7
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      text [set every repeat] = $'Perfomance has to be above 60% to move-on to the real task. Otherwise we can practice a little more. Your performance was '+percent_correct+'%.'
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    CodeComponent calculateTotalPerformance
      Code Type = Auto->JS
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      Begin Routine:
        if number_correct/totalN >= 0.60:
            repeat_InstrTrials.finished = True
  Routine reminderButtons
    TextComponent Button_reminder
      letterHeight = 0.05
      startVal [time (s)] = 0.0
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      text:
        Response reminder: left arrow if "<" and test image was part of memory images.
        Right arrow if ">" and test image was part of memory images
        OPPOSITE arrow key press if test image was NOT part of memory images
        (Press 'space' to start practice trials)
    KeyboardComponent space6
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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    CodeComponent numCorrect
      Code Type = Auto->JS
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      Begin Routine:
        number_correct = 0
        totalN = 0
  Routine trialBegBlank_practice
    PolygonComponent fixStartTrial_2
      fillColor = $[1,1,1]
      shape = cross
      size = (0.01, 0.01)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 6
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  Routine trial_practice
    ImageComponent stim1_Practice
      image [set every repeat] = $image1L
      pos = (-0.11, 0)
      size = (0.2, 0.2)
      startVal [time (s)] = 0
      stopVal [duration (s)] = 2
      texture resolution = 512
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    ImageComponent stim2_Practice
      image [set every repeat] = $image1R
      pos = (0.11, 0)
      size = (0.2, 0.2)
      startVal [time (s)] = 0
      stopVal [duration (s)] = 2
      texture resolution = 512
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    ImageComponent mask1_prac
      image [set every repeat] = $scramble1L
      pos = (-0.11, 0)
      size = (0.2, 0.2)
      startVal [time (s)] = 2
      stopVal [duration (s)] = 0.3
      texture resolution = 512
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    ImageComponent mask2_prac
      image [set every repeat] = $scramble1R
      pos = (0.11, 0)
      size = (0.2, 0.2)
      startVal [time (s)] = 2
      stopVal [duration (s)] = 0.3
      texture resolution = 512
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    PolygonComponent cross_postMem1
      fillColor = $[1,0,0]
      lineColor = $[1,0,0]
      shape = cross
      size = (0.01, 0.01)
      startVal [time (s)] = 2.3
      stopVal [duration (s)] = 0.4
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    ImageComponent stim3_Practice
      image [set every repeat] = $image2L
      pos = (-0.11, 0)
      size = (0.2, 0.2)
      startVal [time (s)] = 2.7
      stopVal [duration (s)] = 2
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    ImageComponent stim4_Practice
      image [set every repeat] = $image2R
      pos = (0.11, 0)
      size = (0.2, 0.2)
      startVal [time (s)] = 2.7
      stopVal [duration (s)] = 2
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    ImageComponent mask3_prac
      image [set every repeat] = $scramble2L
      pos = (-0.11, 0)
      size = (0.2, 0.2)
      startVal [time (s)] = 4.7
      stopVal [duration (s)] = 0.3
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    ImageComponent mask4_prac
      image [set every repeat] = $scramble2R
      pos = (0.11, 0)
      size = (0.2, 0.2)
      startVal [time (s)] = 4.7
      stopVal [duration (s)] = 0.3
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    PolygonComponent cross_postMem2
      fillColor = $[1,0,0]
      lineColor = $[1,0,0]
      shape = cross
      size = (0.01, 0.01)
      startVal [time (s)] = 5
      stopVal [duration (s)] = 0.4
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    TextComponent cueInstr
      letterHeight = 0.05
      startVal [time (s)] = 5.4
      stopVal [duration (s)] = 0.6
      text [set every repeat] = $cue
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    PolygonComponent fixDelay_Practice
      fillColor = $[1,0,0]
      lineColor = $[1,0,0]
      shape = cross
      size = (0.01, 0.01)
      startVal [time (s)] = 6
      stopVal [duration (s)] = 10
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    ImageComponent probe_Practice
      image [set every repeat] = $imageCuedProbe
      size = (0.2, 0.2)
      startVal [time (s)] = 16
      stopVal [duration (s)] = 1
      texture resolution = 512
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    TextComponent probeIndicator_Practice
      letterHeight = 0.1
      pos = (0,0.2)
      startVal [time (s)] = 16
      stopVal [duration (s)] = 1
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      text [set every repeat]:
        $arrow
    PolygonComponent fixProbe_Practice
      fillColor = $[0,1,0]
      lineColor = $[0,1,0]
      shape = cross
      size = (0.01, 0.01)
      startVal [time (s)] = 17
      stopVal [duration (s)] = 3
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    KeyboardComponent keyResp_Practice
      allowedKeys = 'right','left','None'
      correctAns = $buttonCorrect
      forceEndRoutine = False
      startVal [time (s)] = 16
      stopVal [duration (s)] = 4
      store = first key
      storeCorrect = True
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  Routine feedback_Run
    KeyboardComponent space_Run
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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    TextComponent feedbackTxtRun
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      text [set every repeat] = $'Your performance was '+percent_correct+'%. Press space to continue'
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  Routine finalRoutine
    KeyboardComponent space_final
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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    TextComponent txt_final
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      text = Congratulations! You have finished the experiment. Press 'space' one last time.  
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  Routine masks_Instr
    ImageComponent mask1_inst
      image [set every repeat] = $scramble1L
      pos = (-0.11, 0)
      size = (0.2, 0.2)
      startVal [time (s)] = 0
      stopVal [duration (s)] = 0.2
      texture resolution = 512
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    ImageComponent mask2_inst
      image [set every repeat] = $scramble1R
      pos = (0.11, 0)
      size = (0.2, 0.2)
      startVal [time (s)] = 0
      stopVal [duration (s)] = 0.2
      texture resolution = 512
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  Routine trial_Instr_2
    ImageComponent stim3_instr
      image [set every repeat] = $image2L
      pos = (-0.11, 0)
      size = (0.2, 0.2)
      startVal [time (s)] = 0
      texture resolution = 512
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    ImageComponent stim4_inst
      image [set every repeat] = $image2R
      pos = (0.11, 0)
      size = (0.2, 0.2)
      startVal [time (s)] = 0
      texture resolution = 512
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    TextComponent trialExplanation_2
      letterHeight = 0.05
      pos = (0, 0.3)
      startVal [time (s)] = 0.0
      text = You can see the second memory set here
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    KeyboardComponent space3_2
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine masks_Instr_2
    ImageComponent mask1_inst_2
      image [set every repeat] = $scramble2L
      pos = (-0.11, 0)
      size = (0.2, 0.2)
      startVal [time (s)] = 0
      stopVal [duration (s)] = 0.2
      texture resolution = 512
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    ImageComponent mask2_inst_2
      image [set every repeat] = $scramble2R
      pos = (0.11, 0)
      size = (0.2, 0.2)
      startVal [time (s)] = 0
      stopVal [duration (s)] = 0.2
      texture resolution = 512
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  Routine cue_Instr
    TextComponent cue_txt
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      text [set every repeat] = $cue
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    TextComponent cue_instrtxt
      letterHeight = 0.05
      pos = (0, 0.3)
      startVal [time (s)] = 0.0
      text = This number is the cue. It indicates which memory set you have to remember. Either the initially presented one (when cue=1) or the subsequent one (when cue=2).  
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    KeyboardComponent space_InstrCue
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine responseInst_uncued
    ImageComponent probe_inst_2
      image [set every repeat] = $imageUncuedProbe
      size = (0.2, 0.2)
      startVal [time (s)] = 0
      stopVal [duration (s)] = 2.5
      texture resolution = 512
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    TextComponent probeIndicator_inst_2
      letterHeight = 0.1
      pos = (0,0.2)
      startVal [time (s)] = 0
      stopVal [duration (s)] = 2.5
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      text [set every repeat]:
        $arrow
    PolygonComponent fixProbe_inst_2
      fillColor = $[0,1,0]
      lineColor = $[0,1,0]
      shape = cross
      size = (0.01, 0.01)
      startVal [time (s)] = 2.5
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    KeyboardComponent reponseInstr_2
      allowedKeys = 'left'
      correctAns = $buttonCorrect
      forceEndRoutine = True
      startVal [time (s)] = 2.5
      storeCorrect = True
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    TextComponent probeInst_2
      letterHeight = 0.05
      pos = (0, 0.25)
      startVal [time (s)] = 2.5
      text = Surprise! On this trial you are also tested on the non-cued memory set. Since the presented test image was NOT part of the non-cued memory, you should click the OPPOSITE arrow key for a correct answer. 
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  Routine feedback_2_noncue
    CodeComponent feedbackCode_2
      Code Type = Auto->JS
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      Begin Experiment:
        msg=""
      Begin Routine:
        if key_resp_NonCue_practice.corr:
            msg="Correct"
            number_correct = number_correct+1
            totalN = totalN+1
        else:
            msg="Incorrect"
            totalN = totalN+1
    TextComponent feedbackText_2
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 0.8
      text [set every repeat] = $msg
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  Routine noncuedProbe_Practice
    ImageComponent Probe_Noncued_Instr
      image [set every repeat] = $imageUncuedProbe
      size = (0.2, 0.2)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.0
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    TextComponent nonCuedProbeIndicator_practice
      letterHeight = 0.1
      pos = (0, 0.2)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.0
      text [set every repeat] = $arrow
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    PolygonComponent crossNonCued
      fillColor = $[0,1,0]
      lineColor = $[0,1,0]
      shape = cross
      size = (0.01, 0.01)
      startVal [time (s)] = 1
      stopVal [duration (s)] = 3
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    KeyboardComponent key_resp_NonCue_practice
      allowedKeys = 'left','right','None'
      correctAns = $uncuedButtonCorrect
      forceEndRoutine = False
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 4
      store = first key
      storeCorrect = True
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  Routine trial
    ImageComponent stim1
      image [set every repeat] = $image1L
      pos = (-0.11, 0)
      size = (0.2, 0.2)
      startVal [time (s)] = 0
      stopVal [duration (s)] = 2
      texture resolution = 512
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    ImageComponent stim2
      image [set every repeat] = $image1R
      pos = (0.11, 0)
      size = (0.2, 0.2)
      startVal [time (s)] = 0
      stopVal [duration (s)] = 2
      texture resolution = 512
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    ImageComponent mask1
      image [set every repeat] = $scramble1L
      pos = (-0.11, 0)
      size = (0.2, 0.2)
      startVal [time (s)] = 2
      stopVal [duration (s)] = 0.3
      texture resolution = 512
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    ImageComponent mask2
      image [set every repeat] = $scramble1R
      pos = (0.11, 0)
      size = (0.2, 0.2)
      startVal [time (s)] = 2
      stopVal [duration (s)] = 0.3
      texture resolution = 512
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    PolygonComponent cross_postMem1_2
      fillColor = $[1,0,0]
      lineColor = $[1,0,0]
      shape = cross
      size = (0.01, 0.01)
      startVal [time (s)] = 2.3
      stopVal [duration (s)] = 0.4
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    ImageComponent stim3
      image [set every repeat] = $image2L
      pos = (-0.11, 0)
      size = (0.2, 0.2)
      startVal [time (s)] = 2.7
      stopVal [duration (s)] = 2
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    ImageComponent stim4
      image [set every repeat] = $image2R
      pos = (0.11, 0)
      size = (0.2, 0.2)
      startVal [time (s)] = 2.7
      stopVal [duration (s)] = 2
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    ImageComponent mask3
      image [set every repeat] = $scramble2L
      pos = (-0.11, 0)
      size = (0.2, 0.2)
      startVal [time (s)] = 4.7
      stopVal [duration (s)] = 0.3
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    ImageComponent mask4
      image [set every repeat] = $scramble2R
      pos = (0.11, 0)
      size = (0.2, 0.2)
      startVal [time (s)] = 4.7
      stopVal [duration (s)] = 0.3
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    PolygonComponent cross_postMem2_2
      fillColor = $[1,0,0]
      lineColor = $[1,0,0]
      shape = cross
      size = (0.01, 0.01)
      startVal [time (s)] = 5
      stopVal [duration (s)] = 0.4
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    TextComponent cue_run
      letterHeight = 0.05
      startVal [time (s)] = 5.4
      stopVal [duration (s)] = 0.6
      text [set every repeat] = $cue
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    PolygonComponent fixDelay
      fillColor = $[1,0,0]
      lineColor = $[1,0,0]
      shape = cross
      size = (0.01, 0.01)
      startVal [time (s)] = 6
      stopVal [duration (s)] = 10
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    ImageComponent probe_run
      image [set every repeat] = $imageCuedProbe
      size = (0.2, 0.2)
      startVal [time (s)] = 16
      stopVal [duration (s)] = 1
      texture resolution = 512
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    TextComponent probeIndicator
      letterHeight = 0.1
      pos = (0,0.2)
      startVal [time (s)] = 16
      stopVal [duration (s)] = 1
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      text [set every repeat]:
        $arrow
    PolygonComponent fixProbe
      fillColor = $[0,1,0]
      lineColor = $[0,1,0]
      shape = cross
      size = (0.01, 0.01)
      startVal [time (s)] = 17
      stopVal [duration (s)] = 3
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    KeyboardComponent keyResp
      allowedKeys = 'right','left','None'
      correctAns = $buttonCorrect
      forceEndRoutine = False
      startVal [time (s)] = 16
      stopVal [duration (s)] = 4
      store = first key
      storeCorrect = True
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  Routine noncuedProbe
    ImageComponent Probe_Noncued_Instr_2
      image [set every repeat] = $imageUncuedProbe
      size = (0.2, 0.2)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.0
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    TextComponent nonCuedProbeIndicator_practice_2
      letterHeight = 0.1
      pos = (0, 0.2)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.0
      text [set every repeat] = $arrow
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    PolygonComponent crossNonCued_2
      fillColor = $[0,1,0]
      lineColor = $[0,1,0]
      shape = cross
      size = (0.01, 0.01)
      startVal [time (s)] = 1
      stopVal [duration (s)] = 3
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    KeyboardComponent key_resp_NonCue
      allowedKeys = 'left','right','None'
      correctAns = $uncuedButtonCorrect
      forceEndRoutine = False
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 4
      store = first key
      storeCorrect = True
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    CodeComponent countCorrectRun_Noncue
      Code Type = Auto->JS
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      End Routine:
        if key_resp_NonCue.corr:
            number_correct = number_correct + 1
            totalN = totalN+1

        else:
            totalN = totalN+1
  Routine perceptCorrectCalc_practice
    CodeComponent calculatePercentCorrect_Practice_2
      Code Type = Auto->JS
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      End Routine:
        percent_correct = str(round(number_correct/totalN*100,2))
Flow
  Routine Welcome
  LoopInitiator instructionLoop loopType="TrialHandler"
    conditionsFile = instructionTxt.xlsx
    loopType = sequential
    nReps = 1
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    conditions:
      [OrderedDict([('instructions', "On each trial your task will be to remember images that are presented to you.  (Press 'space')")]),
      OrderedDict([('instructions', "You will always be presented with two sets of images consisting of two images each. (Press 'space')")]),
      OrderedDict([('instructions', "The sets will be presented subsequently, one after the other. (Press 'space')")]),
      OrderedDict([('instructions', "After the two sets, there will be a number indicating which set to keep in memory. (Press 'space')")]),
      OrderedDict([('instructions', 'Number "1" refers to the first presented set and number "2" to the second. (Press \'space\')')]),
      OrderedDict([('instructions', "A short memory period will follow where only a fixation cross will be presented in the center of the screen. (Press 'space')")]),
      OrderedDict([('instructions', "Be sure to fixate your eyes on this cross whenever it is present. (Press 'space')")]),
      OrderedDict([('instructions', "At the end of a trial your task will be to indicate whether a test image was part of the set indicated by the number. (Press 'space')")]),
      OrderedDict([('instructions', 'Possible answers: if the test image was part of the memory images, then you have to either press the left arrow key if "<" is presented with the test image or right arrow key if ">" is presented (Press \'space\') ')]),
      OrderedDict([('instructions', "If the image is NOT part of the memorized images, then you have to press THE OPPOSITE arrow key. (Press 'space')")])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
    Routine Instr1
  LoopTerminator instructionLoop
  LoopInitiator trials_Instr loopType="TrialHandler"
    Selected rows = 0
    conditionsFile = trials_Instr.csv
    loopType = sequential
    nReps = 1
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    conditions:
      [OrderedDict([('image1L', 'images/id059_v1_ff.jpg'), ('image1R', 'images/id054_v1_ff.jpg'), ('image2L', 'images/id131_v1_so.jpg'), ('image2R', 'images/id121_v1_so.jpg'), ('imageCuedProbe', 'images/id059_v1_ff.jpg'), ('scramble1L', 'scrambles/id042_v1_ff.jpg'), ('scamble1R', 'scrambles/id053_v1_ff.jpg'), ('scramble2L', 'scrambles/id137_v1_so.jpg'), ('scramble2R', 'scrambles/id140_v1_so.jpg'), ('cuedType', 'FF'), ('uncuedType', 'SO'), ('cue', 1), ('probeCorrect', 1), ('buttonCorrect', 'right'), ('arrow', '>'), ('run', 1), ('imageUncuedProbe', 'images/id119_v1_so.jpg'), ('uncuedProbeCorrect', '0'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,
      OrderedDict([('image1L', 'images/id101_v1_si.jpg'), ('image1R', 'images/id076_v1_si.jpg'), ('image2L', 'images/id023_v1_fm.jpg'), ('image2R', 'images/id014_v1_fm.jpg'), ('imageCuedProbe', 'images/id076_v1_si.jpg'), ('scramble1L', 'scrambles/id082_v1_si.jpg'), ('scamble1R', 'scrambles/id084_v1_si.jpg'), ('scramble2L', 'scrambles/id034_v1_fm.jpg'), ('scramble2R', 'scrambles/id028_v1_fm.jpg'), ('cuedType', 'SI'), ('uncuedType', 'FM'), ('cue', 1), ('probeCorrect', 1), ('buttonCorrect', 'right'), ('arrow', '>'), ('run', 1), ('imageUncuedProbe', 'none'), ('uncuedProbeCorrect', 'none'), ('uncuedButto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,
      OrderedDict([('image1L', 'images/id113_v1_so.jpg'), ('image1R', 'images/id127_v1_so.jpg'), ('image2L', 'images/id116_v1_so.jpg'), ('image2R', 'images/id125_v1_so.jpg'), ('imageCuedProbe', 'images/id134_v1_so.jpg'), ('scramble1L', 'scrambles/id126_v1_so.jpg'), ('scamble1R', 'scrambles/id125_v1_so.jpg'), ('scramble2L', 'scrambles/id134_v1_so.jpg'), ('scramble2R', 'scrambles/id124_v1_so.jpg'), ('cuedType', 'SO'), ('uncuedType', 'SO'), ('cue', 2), ('probeCorrect', 0), ('buttonCorrect', 'right'), ('arrow', '<'), ('run', 1), ('imageUncuedProbe', 'none'), ('uncuedProbeCorrect', 'none'), ('uncuedButto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,
      OrderedDict([('image1L', 'images/id105_v1_si.jpg'), ('image1R', 'images/id091_v1_si.jpg'), ('image2L', 'images/id010_v1_fm.jpg'), ('image2R', 'images/id008_v1_fm.jpg'), ('imageCuedProbe', 'images/id029_v1_fm.jpg'), ('scramble1L', 'scrambles/id100_v1_si.jpg'), ('scamble1R', 'scrambles/id090_v1_si.jpg'), ('scramble2L', 'scrambles/id019_v1_fm.jpg'), ('scramble2R', 'scrambles/id007_v1_fm.jpg'), ('cuedType', 'FM'), ('uncuedType', 'SI'), ('cue', 2), ('probeCorrect', 0), ('buttonCorrect', 'right'), ('arrow', '<'), ('run', 1), ('imageUncuedProbe', 'images/id105_v1_si.jpg'), ('uncuedProbeCorrect', '1')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
    Routine trial_Instr
    Routine masks_Instr
    Routine trial_Instr_2
    Routine masks_Instr_2
    Routine cue_Instr
    Routine delayInst
    Routine responseInst
    Routine responseInst_uncued
    Routine reward
  LoopTerminator trials_Instr
  LoopInitiator repeat_InstrTrials loopType="TrialHandler"
    loopType = random
    nReps = 999
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    Routine reminderButtons
    LoopInitiator trials_instr2 loopType="TrialHandler"
      Selected rows = 1:7
      conditionsFile = trials_Instr.csv
      loopType = random
      nReps = 1
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      conditions:
        [OrderedDict([('image1L', 'images/id059_v1_ff.jpg'), ('image1R', 'images/id054_v1_ff.jpg'), ('image2L', 'images/id131_v1_so.jpg'), ('image2R', 'images/id121_v1_so.jpg'), ('imageCuedProbe', 'images/id059_v1_ff.jpg'), ('scramble1L', 'scrambles/id042_v1_ff.jpg'), ('scramble1R', 'scrambles/id053_v1_ff.jpg'), ('scramble2L', 'scrambles/id137_v1_so.jpg'), ('scramble2R', 'scrambles/id140_v1_so.jpg'), ('cuedType', 'FF'), ('uncuedType', 'SO'), ('cue', 1), ('probeCorrect', 1), ('buttonCorrect', 'right'), ('arrow', '>'), ('run', 1), ('imageUncuedProbe', 'images/id119_v1_so.jpg'), ('uncuedProbeCorrect', '0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,
        OrderedDict([('image1L', 'images/id101_v1_si.jpg'), ('image1R', 'images/id076_v1_si.jpg'), ('image2L', 'images/id023_v1_fm.jpg'), ('image2R', 'images/id014_v1_fm.jpg'), ('imageCuedProbe', 'images/id076_v1_si.jpg'), ('scramble1L', 'scrambles/id082_v1_si.jpg'), ('scramble1R', 'scrambles/id084_v1_si.jpg'), ('scramble2L', 'scrambles/id034_v1_fm.jpg'), ('scramble2R', 'scrambles/id028_v1_fm.jpg'), ('cuedType', 'SI'), ('uncuedType', 'FM'), ('cue', 1), ('probeCorrect', 1), ('buttonCorrect', 'right'), ('arrow', '>'), ('run', 1), ('imageUncuedProbe', 'none'), ('uncuedProbeCorrect', 'none'), ('uncuedButt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,
        OrderedDict([('image1L', 'images/id113_v1_so.jpg'), ('image1R', 'images/id127_v1_so.jpg'), ('image2L', 'images/id116_v1_so.jpg'), ('image2R', 'images/id125_v1_so.jpg'), ('imageCuedProbe', 'images/id134_v1_so.jpg'), ('scramble1L', 'scrambles/id126_v1_so.jpg'), ('scramble1R', 'scrambles/id125_v1_so.jpg'), ('scramble2L', 'scrambles/id134_v1_so.jpg'), ('scramble2R', 'scrambles/id124_v1_so.jpg'), ('cuedType', 'SO'), ('uncuedType', 'SO'), ('cue', 2), ('probeCorrect', 0), ('buttonCorrect', 'right'), ('arrow', '<'), ('run', 1), ('imageUncuedProbe', 'none'), ('uncuedProbeCorrect', 'none'), ('uncuedButt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,
        OrderedDict([('image1L', 'images/id105_v1_si.jpg'), ('image1R', 'images/id091_v1_si.jpg'), ('image2L', 'images/id010_v1_fm.jpg'), ('image2R', 'images/id008_v1_fm.jpg'), ('imageCuedProbe', 'images/id029_v1_fm.jpg'), ('scramble1L', 'scrambles/id100_v1_si.jpg'), ('scramble1R', 'scrambles/id090_v1_si.jpg'), ('scramble2L', 'scrambles/id019_v1_fm.jpg'), ('scramble2R', 'scrambles/id007_v1_fm.jpg'), ('cuedType', 'FM'), ('uncuedType', 'SI'), ('cue', 2), ('probeCorrect', 0), ('buttonCorrect', 'right'), ('arrow', '<'), ('run', 1), ('imageUncuedProbe', 'images/id105_v1_si.jpg'), ('uncuedProbeCorrect', '1'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
      Routine trialBegBlank_practice
      Routine trial_practice
      Routine feedback_2
      LoopInitiator trials_2 loopType="TrialHandler"
        loopType = sequential
        nReps = $probeNonCued
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        Routine noncuedProbe_Practice
        Routine feedback_2_noncue
      LoopTerminator trials_2
    LoopTerminator trials_instr2
    Routine perceptCorrectCalc_practice
    Routine feedbackTest
  LoopTerminator repeat_InstrTrials
  LoopInitiator runs loopType="TrialHandler"
    conditionsFile = runs.csv
    loopType = sequential
    nReps = 1
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    conditions:
      [OrderedDict([('textBefore_run', 'When ready for the first run, press SPACE'), ('trialSelect', 'trials_1.xlsx')]),
      OrderedDict([('textBefore_run', 'Done with run 1. Feel free to take a short break. Press SPACE when ready to continue.'), ('trialSelect', 'trials_2.xlsx')]),
      OrderedDict([('textBefore_run', 'Done with run 2. Feel free to take a short break. Press SPACE when ready to continue.'), ('trialSelect', 'trials_3.xlsx')]),
      OrderedDict([('textBefore_run', 'Done with run 3. Feel free to take a short break. Press SPACE when ready to continue.'), ('trialSelect', 'trials_4.xlsx')])]
    Routine Before_run
    Routine blankStart
    LoopInitiator trialsRun loopType="TrialHandler"
      conditionsFile = $trialSelect
      loopType = random
      nReps = 1
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      Routine trial
      LoopInitiator trialsNonCue loopType="TrialHandler"
        loopType = random
        nReps = $probeNonCued
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        Routine noncuedProbe
      LoopTerminator trialsNonCue
      Routine trialEndBlank
    LoopTerminator trialsRun
    Routine blankEnd
    Routine feedback_Run
  LoopTerminator runs
  Routine finalRoutine
